CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:images
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:images
    Name the output image:crop
    Select the cropping shape:Ellipse
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
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    Coordinates of ellipse center:600,570
    Ellipse radius, X direction:500
    Ellipse radius, Y direction:500
    Remove empty rows and columns?:All
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:crop
    Name the output image:enhance
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:enhance
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|C:\\Users\\james\\Documents\\Yale\\Bindra\\Python GDA
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_nuclei,Image|Threshold_FinalThreshold_nuclei,Image|Threshold_WeightedVariance_nuclei,Image|Threshold_SumOfEntropies_nuclei,Image|Threshold_OrigThreshold_nuclei,Image|FileName_images
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellPyAbility
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
